PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop task
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','o','p'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ins
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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  Routine thanks
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thankyou
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/JEMIMA/Downloads/STROOP TASK EXCEL.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'orange', 'stim_condition': 'I', 'correct_res': 'o'},
      {'word': 'ORANGE', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'ORANGE', 'colour': 'orange', 'stim_condition': 'C', 'correct_res': 'o'},
      {'word': 'BLUE', 'colour': 'purple', 'stim_condition': 'I', 'correct_res': 'p'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'C', 'correct_res': 'b'},
      {'word': 'PURPLE', 'colour': 'purple', 'stim_condition': 'C', 'correct_res': 'p'},
      {'word': 'PURPLE', 'colour': 'blue', 'stim_condition': 'I', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
